# Generated by Configurator on Thu Oct 09 16:00:39 CEST 2025

# Reset
Property,Core,Initialize,0

# Devices
Device,TIScope,NikonTI,TIScope
Device,TIZDrive,NikonTI,TIZDrive
Device,TIXYDrive,NikonTI,TIXYDrive
Device,TIScope-1,NikonTI,TIScope
Device,TIPFSOffset,NikonTI,TIPFSOffset
Device,TIPFSStatus,NikonTI,TIPFSStatus

# Pre-init settings for devices

# Pre-init settings for COM ports

# Hub (parent) references
Parent,TIZDrive,TIScope
Parent,TIXYDrive,TIScope
Parent,TIPFSOffset,TIScope-1
Parent,TIPFSStatus,TIScope-1

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,TIZDrive,0
FocusDirection,TIPFSOffset,0

# Roles
Property,Core,Focus,TIPFSOffset
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets

# PixelSize settings

